PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = mReversalNewAlpha2
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Routines
  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        targetangle = targetAngles[trialsLoop.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trialStep = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        if condsFile == 'mReversal2Cond.xlsx':
            trialCount.text = str(trialsLoop.thisN+1)+" / 90"
        else:
            trialCount.text = str(trialsLoop.thisN+1)+" / 20"

        trialCursor.pos = (1.5,1.5)
        trialMouse.pos = (1.5,1.5)
      Each Frame:
        CursorTargetDistance = sqrt((trialCursor.pos[0]-trialTarget.pos[0])**2 + (trialCursor.pos[1]-trialTarget.pos[1])**2)
        CursorHomeDistance = sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2)

        steps.append(trialStep)
        # steps.push(step)

        if condsFile == 'mReversal2Cond.xlsx':
            mousePosX = -(trialMouse.getPos()[0])
            mousePosY = trialMouse.getPos()[1]
        else:
            mousePosX = trialMouse.getPos()[0]
            mousePosY = trialMouse.getPos()[1]

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trialStep = 1
            if (CursorHomeDistance < .05):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trialStep = 2
            if (CursorTargetDistance < .05):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trialStep = 3
            if (CursorHomeDistance < .05):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trialTarget
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialHome
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (mousePosX, mousePosY)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      startExpValue = 0
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    TextComponent trialCount
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = trialCount
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    KeyboardComponent trialSkip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent intrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if condsFile == "mReversal1Cond.xlsx":
            instrText.text = "In this task use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 20 trials in this first set. Press ‘space’ to start."
        elif condsFile == "mReversal2Cond.xlsx":
            instrText.text = "For the next block of trials, the cursor movement will be mirrored over the Y-axis. Again, use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 90 trials in this next set. Press ‘space’ to start."
        elif condsFile == "mReversal3Cond.xlsx":
            instrText.text = "For the next block of trials, the cursor movement will be normal. Again, use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 20 trials in this next set. Press ‘space’ to start."
        else:
            instrText.text = "space"
  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        // Math related fixes
        pi = Math.PI;
        sin = Math.sin;
        cos = Math.cos;
        sqrt = Math.sqrt;
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        taskVer = int(expInfo['taskVer'])
        if taskVer == 1:
            order = [0,1,2]

        win.mouseVisible = False

        # psychoJS.window

        targetAngles = [30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60]
        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';
      End Experiment:
        win.mouseVisible = True
Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    Selected rows = $order
    conditionsFile = taskConds.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'mReversal1Cond')]),
      OrderedDict([('condsFile', 'mReversal2Cond')]),
      OrderedDict([('condsFile', 'mReversal3Cond')])]
    Routine instr
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trialsLoop
  LoopTerminator taskLoop
  Routine end
